WorkflowBuilder(Version=2.5.1)
Bonsai.Shaders.CreateWindow
  Width=1280
  Height=720
  VSync=On
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=false
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=4
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.MeshResources
  Meshes
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=SphereMapping, FileName=Models\SphereMapping.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=WarpQuad, QuadEffects=None)
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cylinder, FileName=Models\cylinder.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=ParabolicScreen, FileName=Models\parabolic.obj)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=CircleModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\CircleShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColorModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\colorShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=TileModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\TileShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpOutput
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\Warp.vert
      FragmentShader=BonVision:Shaders.Image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpQuad
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureName="", TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\WarpQuad.vert
      FragmentShader=Shaders\WarpQuad.frag
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=horGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\horGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> GroupWorkflow PerspectiveView(Description="Specifies a perspective view, commonly used for 3D stimulus environments.")
    WorkflowInput Source1 => #0
    ExternalizedProperty Light(MemberName=Value, Description="The position of the main point light.") => #1
    ExternalizedProperty FieldOfView(MemberName=Value)
    -> BonVision.FieldOfViewProperty(Value=110)
    -> ExternalizedProperty(MemberName=FovY) => #4
    ExternalizedMapping(Eye, Target, Up) => #5
    #0, #5 -> Bonsai.Shaders.CreateLookAt(Eye(X=0, Y=-0.1, Z=0), Target(X=-0, Y=-0, Z=-1), Up(X=0, Y=1, Z=0)) => #6
    #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=1, Z=1)) => #7
    #0 -> FloatProperty(Value=2.8)
    -> InputMapping(AspectRatio) => #9
    ExternalizedMapping(NearClip, FarClip) => #10
    #9, #4, #10 -> Bonsai.Shaders.CreatePerspectiveFieldOfView(FovY=1.91986215, AspectRatio=2.8, NearClip=0.1, FarClip=1000) => #11
    #6, #11, #7 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 as ViewMatrix,
        Item2 as ProjectionMatrix,
        Item3 as Light)
    -> WorkflowOutput
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderTexture
  RenderState=""
  ClearColor=DarkBlue
  ClearMask="DepthBufferBit ColorBufferBit"
  Width=4096
  Height=4096
  InternalFormat=Rgba
  WrapS=Repeat
  WrapT=Repeat
  MinFilter=Linear
  MagFilter=Linear
-> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D)

GroupWorkflow MainRoom
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Expression) => #1
    #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: it-450
    -> PropertyMapping(TranslationZ) => #3
    ExternalizedMapping(ScaleY, TranslationY) => #4
    ExternalizedMapping(Value(DisplayName=Width))
    -> PropertySource<Bonsai.Shaders.Scale,System.Single>(MemberName=ScaleY, Value=9) => #6
    -> Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> PropertyMapping(TranslationX) => #8
    #6 -> Bonsai.Scripting.ExpressionTransform
      Expression: it/2
    -> PropertyMapping(TranslationX) => #10
    #6 -> PropertyMapping(ScaleX) => #11
    #3, #11 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn4, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=Extensions\DrawStripeModel.bonsai
          TranslationX=0
          TranslationY=-3
          TranslationZ=50.0002441
          ScaleX=9
          ScaleY=900
          ScaleZ=0
          RotationZ=0
          RotationY=0
          RotationX=90
          ShaderName=ColorModel
          MeshName=Plane
          Scale(X=1, Y=1)
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
        -> WorkflowOutput
    #2, #4, #8 -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it-0
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(ScaleY) => #3
        ExternalizedMapping(TranslationY) => #4
        ExternalizedMapping(TranslationX) => #5
        #2, #3, #4, #5 -> GroupWorkflow Left1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4.5
              TranslationY=0.5
              TranslationZ=50.0002441
              ScaleX=100
              ScaleY=7
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-250
        -> PropertyMapping(TranslationZ(Selector=it)) => #8
        #8, #3, #4, #5 -> GroupWorkflow Left2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn3, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=Extensions\DrawShaderModel.bonsai
              TranslationX=-4.5
              TranslationY=0.5
              TranslationZ=-199.999756
              ScaleX=400
              ScaleY=7
              ScaleZ=0
              RotationZ=0
              RotationY=90
              RotationX=0
              ShaderName=CircleModel
              MeshName=Plane
              CircleRadius=0.8
              Scale(X=40, Y=1)
              Color(X=0, Y=0, Z=0, W=1)
              BackColor(X=0.8, Y=0.8, Z=0.8, W=1)
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it+250
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #3, #4, #5 -> GroupWorkflow Left0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn3, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=Extensions\DrawShaderModel.bonsai
              TranslationX=-4.5
              TranslationY=0.5
              TranslationZ=300.000244
              ScaleX=400
              ScaleY=7
              ScaleZ=0
              RotationZ=0
              RotationY=90
              RotationX=0
              ShaderName=CircleModel
              MeshName=Plane
              CircleRadius=0.8
              Scale(X=40, Y=1)
              Color(X=0, Y=0, Z=0, W=1)
              BackColor(X=0.8, Y=0.8, Z=0.8, W=1)
            -> WorkflowOutput
    #2, #4, #10 -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it-0
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(ScaleY) => #3
        ExternalizedMapping(TranslationY) => #4
        ExternalizedMapping(TranslationX) => #5
        #2, #3, #4, #5 -> GroupWorkflow Right1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4.5
              TranslationY=0.5
              TranslationZ=50.0002441
              ScaleX=100
              ScaleY=7
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-250
        -> PropertyMapping(TranslationZ(Selector=it)) => #8
        #8, #3, #4, #5 -> GroupWorkflow Right2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn3, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=Extensions\DrawShaderModel.bonsai
              TranslationX=4.5
              TranslationY=0.5
              TranslationZ=-199.999756
              ScaleX=400
              ScaleY=7
              ScaleZ=0
              RotationZ=0
              RotationY=90
              RotationX=0
              ShaderName=CircleModel
              MeshName=Plane
              CircleRadius=0.8
              Scale(X=40, Y=1)
              Color(X=0, Y=0, Z=0, W=1)
              BackColor(X=0.8, Y=0.8, Z=0.8, W=1)
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it+250
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #3, #4, #5 -> GroupWorkflow Right0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn3, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=Extensions\DrawShaderModel.bonsai
              TranslationX=4.5
              TranslationY=0.5
              TranslationZ=300.000244
              ScaleX=400
              ScaleY=7
              ScaleZ=0
              RotationZ=0
              RotationY=90
              RotationX=0
              ShaderName=CircleModel
              MeshName=Plane
              CircleRadius=0.8
              Scale(X=40, Y=1)
              Color(X=0, Y=0, Z=0, W=1)
              BackColor(X=0.8, Y=0.8, Z=0.8, W=1)
            -> WorkflowOutput
    #2 -> GroupWorkflow Towers
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it+450-70-160-150
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(ScaleY) => #3
        ExternalizedMapping(TranslationY) => #4
        ExternalizedMapping(TranslationX) => #5
        #2, #3, #4, #5 -> IncludeWorkflow
          Path=Extensions\Tower.bonsai
          frequency(X=1, Y=24)
          RotationZ=0
          RotationX=0
          ScaleY=66
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
          ShaderName=TileModel
          TextureName=fwn3
          TranslationY=30
          TranslationX=10.56
          TranslationZ=120.000244
          ScaleX=12
          RotationY=1.57079637
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it+450-70-160
        -> PropertyMapping(TranslationZ(Selector=it)) => #8
        #8, #3, #4, #5 -> IncludeWorkflow
          Path=Extensions\Tower.bonsai
          frequency(X=8, Y=1)
          RotationZ=0
          RotationX=0
          ScaleY=66
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
          ShaderName=TileModel
          TextureName=fwn3
          TranslationY=30
          TranslationX=10.56
          TranslationZ=270.000244
          ScaleX=12
          RotationY=1.57079637
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it+450-70
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #3, #4, #5 -> IncludeWorkflow
          Path=Extensions\Tower.bonsai
          frequency(X=2, Y=8)
          RotationZ=0
          RotationX=0
          ScaleY=66
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
          ShaderName=TileModel
          TextureName=fwn3
          TranslationY=30
          TranslationX=10.56
          TranslationZ=430.000244
          ScaleX=12
          RotationY=1.57079637
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-50-70-160-150
        -> PropertyMapping(TranslationZ(Selector=it)) => #14
        #14, #3, #4, #5 -> IncludeWorkflow
          Path=Extensions\Tower.bonsai
          frequency(X=1, Y=24)
          RotationZ=0
          RotationX=0
          ScaleY=66
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
          ShaderName=TileModel
          TextureName=fwn3
          TranslationY=30
          TranslationX=10.56
          TranslationZ=-379.999756
          ScaleX=12
          RotationY=1.57079637
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-50-70-160
        -> PropertyMapping(TranslationZ(Selector=it)) => #17
        #17, #3, #4, #5 -> IncludeWorkflow
          Path=Extensions\Tower.bonsai
          frequency(X=8, Y=1)
          RotationZ=0
          RotationX=0
          ScaleY=66
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
          ShaderName=TileModel
          TextureName=fwn3
          TranslationY=30
          TranslationX=10.56
          TranslationZ=-229.999756
          ScaleX=12
          RotationY=1.57079637
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-50-70
        -> PropertyMapping(TranslationZ(Selector=it)) => #20
        #20, #3, #4, #5 -> IncludeWorkflow
          Path=Extensions\Tower.bonsai
          frequency(X=2, Y=8)
          RotationZ=0
          RotationX=0
          ScaleY=66
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
          ShaderName=TileModel
          TextureName=fwn3
          TranslationY=30
          TranslationX=10.56
          TranslationZ=-69.9997559
          ScaleX=12
          RotationY=1.57079637

FloatProperty(Value=0)
-> IgnoreElements
-> BehaviorSubject "z pos"

DoubleProperty(Value=0)
-> BehaviorSubject TurnPos

FloatProperty(Value=0)
-> IgnoreElements
-> BehaviorSubject Encoder

GroupWorkflow HarpEncoder
    Bonsai.Harp.Device(PortName=COM3, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false)
    -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0)
    -> Bonsai.IO.CsvWriter(FileName=Data\EncoderTestData5v.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)
    -> IncludeWorkflow(Path=Extensions\TurnPositionCalculation.bonsai) => #3
    ExternalizedMapping(RangeMax(DisplayName=WheelPerimeter)) => #4
    #3, #4 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=62.8318, RescaleType=Linear)
    -> MulticastSubject Encoder
    -> WorkflowOutput

Timer(DueTime=PT0S, Period=PT0S)
-> SelectMany RunTime
    WorkflowInput Source1 => #0
    SubscribeSubject RewardLocation
    -> PropertyMapping(RewardLocation) => #2
    #0, #2 -> SelectMany StimRewControl
        GroupWorkflow Movement
            SubscribeSubject Encoder => #0
            -> Take(Count=1) => #1
            #0, #1 -> CombineLatest
            -> Subtract
            -> TakeWhile
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> Repeat
            -> Add(Operand=DoubleProperty(Value=0))
            -> Bonsai.Scripting.ExpressionTransform
              Expression: single(it)
            -> MulticastSubject "z pos"
            -> TakeWhile
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> LessThan(Operand=FloatProperty(Value=500))
                -> WorkflowOutput
            -> Unit
            -> WorkflowOutput

        SubscribeSubject "z pos" => #1
        ExternalizedMapping(Value(DisplayName=RewardLocation)) => #2
        #2, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=520))
        -> DistinctUntilChanged
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> First
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital0)
        -> MulticastSubject BehaviorCommandBoardA => #8
        ExternalizedMapping(DueTime(DisplayName=RewardDuration)) => #9
        #8, #9 -> Delay(DueTime=PT0.2S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital0)
        -> MulticastSubject BehaviorCommandBoardA
        -> TakeLast(Count=1) => #13
        SubscribeSubject NRewards
        -> PropertyMapping(Value) => #15
        #13, #15 -> IntProperty(Value=12)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject NRewards
    -> RepeatCount(Count=1000)
    -> Last
    -> WorkflowOutput
-> TakeLast(Count=1)
-> SelectMany Termination
    WorkflowInput Source1
    -> IntProperty(Value=0)
    -> Disable Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=5000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(AnalogOutputChannelConfiguration(ChannelName=FlowSensor, MinimumValue=0, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
    -> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow
  Path=BonVision:Environment.PerspectiveView.bonsai
  Light(X=0, Y=1, Z=1)
  FieldOfView=10
  Eye(X=-2, Y=0, Z=0)
  Target(X=1, Y=0, Z=0)
  Up(X=0, Y=1, Z=0)
  NearClip=0.1
  FarClip=1000
-> IncludeWorkflow
  Path=BonVision:Primitives.DrawTexturedModel.bonsai
  TranslationX=0
  TranslationY=0
  TranslationZ=0
  ScaleX=1
  ScaleY=1
  ScaleZ=1
  MeshName=ParabolicScreen
  Ambient(X=1, Y=1, Z=1)
  Diffuse(X=1, Y=1, Z=1)
  Specular(X=0, Y=0, Z=0)
  SpecularExponent=0.1
  RotationZ=90
  RotationY=90
  RotationX=0
-> Bonsai.Shaders.RenderTexture
  RenderState=""
  ClearColor=IndianRed
  ClearMask="DepthBufferBit ColorBufferBit"
  Width=4096
  Height=4096
  InternalFormat=Rgba
  WrapS=Repeat
  WrapT=Repeat
  MinFilter=Linear
  MagFilter=Linear
-> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=WarpQuad, TextureName="", TextureTarget=Texture2D)
-> Bonsai.Shaders.WarpPerspective(Destination(Point2f(X=-1, Y=-1), Point2f(X=-1, Y=1), Point2f(X=1, Y=1), Point2f(X=1, Y=-1)))
-> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=WarpQuad)
-> Bonsai.Shaders.DrawMesh(ShaderName=WarpQuad, MeshName=WarpQuad)

IncludeWorkflow BehaviorCommandBoardA(Path=Bonsai.Harp:CommandSubject.bonsai)

GroupWorkflow "Trial Structure"(Description="Uses the trial number to toggle Stimulus and Reward on/off.")
    ExternalizedMapping(FileName(DisplayName=Protocol))
    -> Bonsai.IO.CsvReader(FileName=Protocols\easywater.txt, ScanPattern=%i, SkipRows=0) => #1
    SubscribeSubject NRewards => #2
    #1, #2 -> Zip
    -> MemberSelector(Selector=Item1)
    -> DistinctUntilChanged
    -> MulticastSubject RewardLocation

IntProperty(Value=0)
-> BehaviorSubject NRewards

SubscribeSubject "z pos" => #39
SubscribeSubject BehaviorCommandBoardA
-> Bonsai.Harp.Device(PortName=COM9, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false)
-> Bonsai.Harp.FilterMessage(Address=nil, MessageType=nil)
-> Bonsai.Harp.DeviceEvent(Type=MessageTimestamp) => #43
#43, #39 -> WithLatestFrom => #44
-> MemberSelector(Selector=Item2)
-> Bonsai.Dsp.Difference(Order=1) => #46
#43 -> Bonsai.Dsp.Difference(Order=1) => #47
#46, #47 -> CombineLatest
-> Sink "Calc Velocity"
    WorkflowInput Source1
    -> Divide
    -> Bonsai.Dsp.FrequencyFilter(SampleRate=1000, Cutoff1=1, Cutoff2=100, KernelLength=60, FilterType=LowPass)
    -> WorkflowOutput
#44 -> Disable Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)

FloatProperty(Value=40)
-> BehaviorSubject RewardLocation
