<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns:p1="clr-namespace:OpenTK;assembly=OpenTK"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p3="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1280</gl:Width>
          <gl:Height>720</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>DimGray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>4</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>SphereMapping</gl:Name>
              <gl:FileName>Models\SphereMapping.obj</gl:FileName>
            </gl:MeshConfiguration>
            <gl:MeshConfiguration xsi:type="gl:TexturedQuad">
              <gl:Name>WarpQuad</gl:Name>
              <gl:QuadEffects>None</gl:QuadEffects>
            </gl:MeshConfiguration>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>cylinder</gl:Name>
              <gl:FileName>Models\cylinder.obj</gl:FileName>
            </gl:MeshConfiguration>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>ParabolicScreen</gl:Name>
              <gl:FileName>Models\parabolic.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>CircleModel</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\ShaderModel.vert</gl:VertexShader>
              <gl:FragmentShader>Shaders\CircleShader.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>ColorModel</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\ShaderModel.vert</gl:VertexShader>
              <gl:FragmentShader>Shaders\colorShader.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>TileModel</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\ShaderModel.vert</gl:VertexShader>
              <gl:FragmentShader>Shaders\TileShader.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>WarpOutput</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings>
                <gl:BufferBinding xsi:type="gl:TextureBinding">
                  <gl:Name>tex</gl:Name>
                  <gl:TextureSlot>Texture0</gl:TextureSlot>
                  <gl:TextureTarget>Texture2D</gl:TextureTarget>
                </gl:BufferBinding>
              </gl:BufferBindings>
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\Warp.vert</gl:VertexShader>
              <gl:FragmentShader>BonVision:Shaders.Image.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>WarpQuad</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings>
                <gl:BufferBinding xsi:type="gl:TextureBinding">
                  <gl:Name>tex</gl:Name>
                  <gl:TextureSlot>Texture0</gl:TextureSlot>
                  <gl:TextureName />
                  <gl:TextureTarget>Texture2D</gl:TextureTarget>
                </gl:BufferBinding>
              </gl:BufferBindings>
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\WarpQuad.vert</gl:VertexShader>
              <gl:FragmentShader>Shaders\WarpQuad.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
          </gl:Shaders>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>plaid</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\plaid.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>vertGrat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\vertGrat.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>fwn1</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\fwn1.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>fwn2</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\fwn2.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>fwn3</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\fwn3.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>fwn4</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\fwn4.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>grayEnd</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\grayEnd.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>horGrat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\horGrat.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>gray</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\gray.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>grid</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\grid.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateRenderState">
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:DepthFunctionState">
              <gl:Function>Less</gl:Function>
            </gl:StateConfiguration>
          </gl:RenderState>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PerspectiveView</Name>
        <Description>Specifies a perspective view, commonly used for 3D stimulus environments.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Light</Name>
              <Description>The position of the main point light.</Description>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>FieldOfView</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bv:FieldOfViewProperty">
                <bv:Value>110</bv:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>FovY</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Eye" />
              <Property Name="Target" />
              <Property Name="Up" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateLookAt">
                <gl:Eye>
                  <gl:X>0</gl:X>
                  <gl:Y>-0.1</gl:Y>
                  <gl:Z>0</gl:Z>
                </gl:Eye>
                <gl:Target>
                  <gl:X>-0</gl:X>
                  <gl:Y>-0</gl:Y>
                  <gl:Z>-1</gl:Z>
                </gl:Target>
                <gl:Up>
                  <gl:X>0</gl:X>
                  <gl:Y>1</gl:Y>
                  <gl:Z>0</gl:Z>
                </gl:Up>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="gl:CreateLookAt,p1:Vector3">
              <MemberName>Eye</MemberName>
              <Value>
                <X>0</X>
                <Y>1</Y>
                <Z>1</Z>
              </Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>2.8</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="AspectRatio" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="NearClip" />
              <Property Name="FarClip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreatePerspectiveFieldOfView">
                <gl:FovY>1.91986215</gl:FovY>
                <gl:AspectRatio>2.8</gl:AspectRatio>
                <gl:NearClip>0.1</gl:NearClip>
                <gl:FarClip>1000</gl:FarClip>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1 as ViewMatrix,
Item2 as ProjectionMatrix,
Item3 as Light)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="1" To="7" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="11" Label="Source2" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="12" Label="Source1" />
            <Edge From="7" To="12" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source3" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Draw3DStim</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderTexture">
          <gl:RenderState />
          <gl:ClearColor>DarkBlue</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:Width>4096</gl:Width>
          <gl:Height>4096</gl:Height>
          <gl:InternalFormat>Rgba</gl:InternalFormat>
          <gl:WrapS>Repeat</gl:WrapS>
          <gl:WrapT>Repeat</gl:WrapT>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>TexturedModel</gl:ShaderName>
          <gl:TextureName />
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>MeshMapping</Name>
          <Description>Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.</Description>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>MainRoom</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>z pos</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Expression" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it-450</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationZ" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ScaleY" />
              <Property Name="TranslationY" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Width" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="gl:Scale,sys:Single">
              <MemberName>ScaleY</MemberName>
              <Value>9</Value>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>-it/2</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it/2</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ScaleX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Floor</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw3DStim</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationZ" />
                    <Property Name="TranslationX" />
                    <Property Name="TranslationY" />
                    <Property Name="RotationZ" />
                    <Property Name="RotationY" />
                    <Property Name="RotationX" />
                    <Property Name="ScaleX" />
                    <Property Name="ScaleY" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TextureName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture0</gl:TextureSlot>
                      <gl:ShaderName>TexturedModel</gl:ShaderName>
                      <gl:TextureName>fwn4</gl:TextureName>
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawStripeModel.bonsai">
                    <TranslationX>0</TranslationX>
                    <TranslationY>-3</TranslationY>
                    <TranslationZ>-446.302124</TranslationZ>
                    <ScaleX>9</ScaleX>
                    <ScaleY>900</ScaleY>
                    <ScaleZ>0</ScaleZ>
                    <RotationZ>0</RotationZ>
                    <RotationY>0</RotationY>
                    <RotationX>90</RotationX>
                    <ShaderName>ColorModel</ShaderName>
                    <MeshName>Plane</MeshName>
                    <Scale>
                      <X>1</X>
                      <Y>1</Y>
                    </Scale>
                    <Color>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                      <W>1</W>
                    </Color>
                    <BackColor>
                      <X>1</X>
                      <Y>1</Y>
                      <Z>1</Z>
                      <W>1</W>
                    </BackColor>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LeftWall</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it-0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ScaleY" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationY" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationX" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Left1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw3DStim</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TranslationZ" />
                          <Property Name="TranslationX" />
                          <Property Name="TranslationY" />
                          <Property Name="RotationZ" />
                          <Property Name="RotationY" />
                          <Property Name="RotationX" />
                          <Property Name="ScaleX" />
                          <Property Name="ScaleY" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>TexturedModel</gl:ShaderName>
                            <gl:TextureName>gray</gl:TextureName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
                          <TranslationX>-4.5</TranslationX>
                          <TranslationY>0.5</TranslationY>
                          <TranslationZ>-446.302124</TranslationZ>
                          <ScaleX>100</ScaleX>
                          <ScaleY>7</ScaleY>
                          <ScaleZ>0</ScaleZ>
                          <MeshName>Plane</MeshName>
                          <Ambient>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                          </Ambient>
                          <Diffuse>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                          </Diffuse>
                          <Specular>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                          </Specular>
                          <SpecularExponent>10</SpecularExponent>
                          <RotationZ>0</RotationZ>
                          <RotationY>90</RotationY>
                          <RotationX>0</RotationX>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it-250</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Left2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw3DStim</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TranslationZ" />
                          <Property Name="TranslationX" />
                          <Property Name="TranslationY" />
                          <Property Name="RotationZ" />
                          <Property Name="RotationY" />
                          <Property Name="RotationX" />
                          <Property Name="ScaleX" />
                          <Property Name="ScaleY" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>TexturedModel</gl:ShaderName>
                            <gl:TextureName>fwn3</gl:TextureName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawShaderModel.bonsai">
                          <TranslationX>-4.5</TranslationX>
                          <TranslationY>0.5</TranslationY>
                          <TranslationZ>-696.3021</TranslationZ>
                          <ScaleX>400</ScaleX>
                          <ScaleY>7</ScaleY>
                          <ScaleZ>0</ScaleZ>
                          <RotationZ>0</RotationZ>
                          <RotationY>90</RotationY>
                          <RotationX>0</RotationX>
                          <ShaderName>CircleModel</ShaderName>
                          <MeshName>Plane</MeshName>
                          <CircleRadius>0.8</CircleRadius>
                          <Scale>
                            <X>40</X>
                            <Y>1</Y>
                          </Scale>
                          <Color>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                            <W>1</W>
                          </Color>
                          <BackColor>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                            <W>1</W>
                          </BackColor>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it+250</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Left0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw3DStim</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TranslationZ" />
                          <Property Name="TranslationX" />
                          <Property Name="TranslationY" />
                          <Property Name="RotationZ" />
                          <Property Name="RotationY" />
                          <Property Name="RotationX" />
                          <Property Name="ScaleX" />
                          <Property Name="ScaleY" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>TexturedModel</gl:ShaderName>
                            <gl:TextureName>fwn3</gl:TextureName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawShaderModel.bonsai">
                          <TranslationX>-4.5</TranslationX>
                          <TranslationY>0.5</TranslationY>
                          <TranslationZ>-196.302124</TranslationZ>
                          <ScaleX>400</ScaleX>
                          <ScaleY>7</ScaleY>
                          <ScaleZ>0</ScaleZ>
                          <RotationZ>0</RotationZ>
                          <RotationY>90</RotationY>
                          <RotationX>0</RotationX>
                          <ShaderName>CircleModel</ShaderName>
                          <MeshName>Plane</MeshName>
                          <CircleRadius>0.8</CircleRadius>
                          <Scale>
                            <X>40</X>
                            <Y>1</Y>
                          </Scale>
                          <Color>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                            <W>1</W>
                          </Color>
                          <BackColor>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                            <W>1</W>
                          </BackColor>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="0" To="10" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="3" To="9" Label="Source2" />
                  <Edge From="3" To="12" Label="Source2" />
                  <Edge From="4" To="6" Label="Source3" />
                  <Edge From="4" To="9" Label="Source3" />
                  <Edge From="4" To="12" Label="Source3" />
                  <Edge From="5" To="6" Label="Source4" />
                  <Edge From="5" To="9" Label="Source4" />
                  <Edge From="5" To="12" Label="Source4" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>RightWall</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it-0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ScaleY" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationY" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationX" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Right1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw3DStim</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TranslationZ" />
                          <Property Name="TranslationX" />
                          <Property Name="TranslationY" />
                          <Property Name="RotationZ" />
                          <Property Name="RotationY" />
                          <Property Name="RotationX" />
                          <Property Name="ScaleX" />
                          <Property Name="ScaleY" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>TexturedModel</gl:ShaderName>
                            <gl:TextureName>gray</gl:TextureName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
                          <TranslationX>4.5</TranslationX>
                          <TranslationY>0.5</TranslationY>
                          <TranslationZ>-446.302124</TranslationZ>
                          <ScaleX>100</ScaleX>
                          <ScaleY>7</ScaleY>
                          <ScaleZ>0</ScaleZ>
                          <MeshName>Plane</MeshName>
                          <Ambient>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                          </Ambient>
                          <Diffuse>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                          </Diffuse>
                          <Specular>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                          </Specular>
                          <SpecularExponent>10</SpecularExponent>
                          <RotationZ>0</RotationZ>
                          <RotationY>90</RotationY>
                          <RotationX>0</RotationX>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it-250</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Right2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw3DStim</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TranslationZ" />
                          <Property Name="TranslationX" />
                          <Property Name="TranslationY" />
                          <Property Name="RotationZ" />
                          <Property Name="RotationY" />
                          <Property Name="RotationX" />
                          <Property Name="ScaleX" />
                          <Property Name="ScaleY" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>TexturedModel</gl:ShaderName>
                            <gl:TextureName>fwn3</gl:TextureName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawShaderModel.bonsai">
                          <TranslationX>4.5</TranslationX>
                          <TranslationY>0.5</TranslationY>
                          <TranslationZ>-696.3021</TranslationZ>
                          <ScaleX>400</ScaleX>
                          <ScaleY>7</ScaleY>
                          <ScaleZ>0</ScaleZ>
                          <RotationZ>0</RotationZ>
                          <RotationY>90</RotationY>
                          <RotationX>0</RotationX>
                          <ShaderName>CircleModel</ShaderName>
                          <MeshName>Plane</MeshName>
                          <CircleRadius>0.8</CircleRadius>
                          <Scale>
                            <X>40</X>
                            <Y>1</Y>
                          </Scale>
                          <Color>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                            <W>1</W>
                          </Color>
                          <BackColor>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                            <W>1</W>
                          </BackColor>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it+250</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Right0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw3DStim</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TranslationZ" />
                          <Property Name="TranslationX" />
                          <Property Name="TranslationY" />
                          <Property Name="RotationZ" />
                          <Property Name="RotationY" />
                          <Property Name="RotationX" />
                          <Property Name="ScaleX" />
                          <Property Name="ScaleY" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>TexturedModel</gl:ShaderName>
                            <gl:TextureName>fwn3</gl:TextureName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawShaderModel.bonsai">
                          <TranslationX>4.5</TranslationX>
                          <TranslationY>0.5</TranslationY>
                          <TranslationZ>-196.302124</TranslationZ>
                          <ScaleX>400</ScaleX>
                          <ScaleY>7</ScaleY>
                          <ScaleZ>0</ScaleZ>
                          <RotationZ>0</RotationZ>
                          <RotationY>90</RotationY>
                          <RotationX>0</RotationX>
                          <ShaderName>CircleModel</ShaderName>
                          <MeshName>Plane</MeshName>
                          <CircleRadius>0.8</CircleRadius>
                          <Scale>
                            <X>40</X>
                            <Y>1</Y>
                          </Scale>
                          <Color>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                            <W>1</W>
                          </Color>
                          <BackColor>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                            <W>1</W>
                          </BackColor>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="0" To="10" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="3" To="9" Label="Source2" />
                  <Edge From="3" To="12" Label="Source2" />
                  <Edge From="4" To="6" Label="Source3" />
                  <Edge From="4" To="9" Label="Source3" />
                  <Edge From="4" To="12" Label="Source3" />
                  <Edge From="5" To="6" Label="Source4" />
                  <Edge From="5" To="9" Label="Source4" />
                  <Edge From="5" To="12" Label="Source4" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Towers</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it+450-70-160-150</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ScaleY" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationY" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationX" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Tower.bonsai">
                    <frequency>
                      <X>1</X>
                      <Y>8</Y>
                    </frequency>
                    <RotationZ>0</RotationZ>
                    <RotationX>0</RotationX>
                    <ScaleY>66</ScaleY>
                    <Color>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                      <W>1</W>
                    </Color>
                    <BackColor>
                      <X>1</X>
                      <Y>1</Y>
                      <Z>1</Z>
                      <W>1</W>
                    </BackColor>
                    <ShaderName>TileModel</ShaderName>
                    <TextureName>fwn3</TextureName>
                    <TranslationY>30</TranslationY>
                    <TranslationX>10.56</TranslationX>
                    <TranslationZ>-376.302124</TranslationZ>
                    <ScaleX>12</ScaleX>
                    <RotationY>1.57079637</RotationY>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it+450-70-160</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Tower.bonsai">
                    <frequency>
                      <X>8</X>
                      <Y>1</Y>
                    </frequency>
                    <RotationZ>0</RotationZ>
                    <RotationX>0</RotationX>
                    <ScaleY>66</ScaleY>
                    <Color>
                      <X>1</X>
                      <Y>1</Y>
                      <Z>0</Z>
                      <W>1</W>
                    </Color>
                    <BackColor>
                      <X>0</X>
                      <Y>1</Y>
                      <Z>0</Z>
                      <W>1</W>
                    </BackColor>
                    <ShaderName>TileModel</ShaderName>
                    <TextureName>fwn3</TextureName>
                    <TranslationY>30</TranslationY>
                    <TranslationX>10.56</TranslationX>
                    <TranslationZ>-226.302124</TranslationZ>
                    <ScaleX>12</ScaleX>
                    <RotationY>1.57079637</RotationY>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it+450-70</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Tower.bonsai">
                    <frequency>
                      <X>2</X>
                      <Y>8</Y>
                    </frequency>
                    <RotationZ>0</RotationZ>
                    <RotationX>0</RotationX>
                    <ScaleY>66</ScaleY>
                    <Color>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                      <W>1</W>
                    </Color>
                    <BackColor>
                      <X>1</X>
                      <Y>1</Y>
                      <Z>1</Z>
                      <W>1</W>
                    </BackColor>
                    <ShaderName>TileModel</ShaderName>
                    <TextureName>fwn3</TextureName>
                    <TranslationY>30</TranslationY>
                    <TranslationX>10.56</TranslationX>
                    <TranslationZ>-66.302124</TranslationZ>
                    <ScaleX>12</ScaleX>
                    <RotationY>1.57079637</RotationY>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it-50-70-160-150</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Tower.bonsai">
                    <frequency>
                      <X>1</X>
                      <Y>8</Y>
                    </frequency>
                    <RotationZ>0</RotationZ>
                    <RotationX>0</RotationX>
                    <ScaleY>66</ScaleY>
                    <Color>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                      <W>1</W>
                    </Color>
                    <BackColor>
                      <X>1</X>
                      <Y>1</Y>
                      <Z>1</Z>
                      <W>1</W>
                    </BackColor>
                    <ShaderName>TileModel</ShaderName>
                    <TextureName>fwn3</TextureName>
                    <TranslationY>30</TranslationY>
                    <TranslationX>10.56</TranslationX>
                    <TranslationZ>-876.3021</TranslationZ>
                    <ScaleX>12</ScaleX>
                    <RotationY>1.57079637</RotationY>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it-50-70-160</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Tower.bonsai">
                    <frequency>
                      <X>8</X>
                      <Y>1</Y>
                    </frequency>
                    <RotationZ>0</RotationZ>
                    <RotationX>0</RotationX>
                    <ScaleY>66</ScaleY>
                    <Color>
                      <X>1</X>
                      <Y>1</Y>
                      <Z>0</Z>
                      <W>1</W>
                    </Color>
                    <BackColor>
                      <X>0</X>
                      <Y>1</Y>
                      <Z>0</Z>
                      <W>1</W>
                    </BackColor>
                    <ShaderName>TileModel</ShaderName>
                    <TextureName>fwn3</TextureName>
                    <TranslationY>30</TranslationY>
                    <TranslationX>10.56</TranslationX>
                    <TranslationZ>-726.3021</TranslationZ>
                    <ScaleX>12</ScaleX>
                    <RotationY>1.57079637</RotationY>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it-50-70</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Tower.bonsai">
                    <frequency>
                      <X>2</X>
                      <Y>8</Y>
                    </frequency>
                    <RotationZ>0</RotationZ>
                    <RotationX>0</RotationX>
                    <ScaleY>66</ScaleY>
                    <Color>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                      <W>1</W>
                    </Color>
                    <BackColor>
                      <X>1</X>
                      <Y>1</Y>
                      <Z>1</Z>
                      <W>1</W>
                    </BackColor>
                    <ShaderName>TileModel</ShaderName>
                    <TextureName>fwn3</TextureName>
                    <TranslationY>30</TranslationY>
                    <TranslationX>10.56</TranslationX>
                    <TranslationZ>-566.3021</TranslationZ>
                    <ScaleX>12</ScaleX>
                    <RotationY>1.57079637</RotationY>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="0" To="10" Label="Source1" />
                  <Edge From="0" To="13" Label="Source1" />
                  <Edge From="0" To="16" Label="Source1" />
                  <Edge From="0" To="19" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="3" To="12" Label="Source2" />
                  <Edge From="3" To="9" Label="Source2" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="3" To="15" Label="Source2" />
                  <Edge From="3" To="18" Label="Source2" />
                  <Edge From="3" To="21" Label="Source2" />
                  <Edge From="4" To="12" Label="Source3" />
                  <Edge From="4" To="9" Label="Source3" />
                  <Edge From="4" To="6" Label="Source3" />
                  <Edge From="4" To="15" Label="Source3" />
                  <Edge From="4" To="18" Label="Source3" />
                  <Edge From="4" To="21" Label="Source3" />
                  <Edge From="5" To="12" Label="Source4" />
                  <Edge From="5" To="9" Label="Source4" />
                  <Edge From="5" To="6" Label="Source4" />
                  <Edge From="5" To="15" Label="Source4" />
                  <Edge From="5" To="18" Label="Source4" />
                  <Edge From="5" To="21" Label="Source4" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="13" Label="Source1" />
            <Edge From="2" To="14" Label="Source1" />
            <Edge From="2" To="15" Label="Source1" />
            <Edge From="3" To="12" Label="Source1" />
            <Edge From="4" To="13" Label="Source2" />
            <Edge From="4" To="14" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="13" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="14" Label="Source3" />
            <Edge From="11" To="12" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Texture1</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Texture2</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Texture3</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Texture4</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:IgnoreElements" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>z pos</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TurnPos</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:IgnoreElements" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Encoder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:IgnoreElements" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>OlfactometerCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OlfactometerCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:DeviceTCPClient">
          <p2:Port>3336</p2:Port>
          <p2:IPAddress>192.168.5.16</p2:IPAddress>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>OlfactometerEvents</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>EncoderCsvReader</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>MouseEncoder</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpEncoder</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:PortName>COM3</harp:PortName>
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
              </Combinator>
            </Expression>
            <Expression xsi:type="p3:BehaviorEvent">
              <p3:Type>AnalogInput</p3:Type>
              <p3:Mask>Port0</p3:Mask>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvWriter">
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              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnPositionCalculation.bonsai" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="RangeMax" DisplayName="WheelPerimeter" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>5</dsp:Max>
                <dsp:RangeMin>0</dsp:RangeMin>
                <dsp:RangeMax>62</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Encoder</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Initialize</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BankFlowCommand.bonsai">
              <BankIndex>Bank8</BankIndex>
              <FlowRate>100</FlowRate>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OlfactometerCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeLast">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>RunTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Movement</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Movement</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Encoder</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Subtract" />
                  <Expression xsi:type="TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="GreaterThanOrEqual">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>single(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>z pos</Name>
                  </Expression>
                  <Expression xsi:type="TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="LessThan">
                          <Operand xsi:type="FloatProperty">
                            <Value>500</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>10</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>z pos</Name>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>200</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BankOdorCommand.bonsai">
              <ValveIndex>6</ValveIndex>
              <BankIndex>Bank8</BankIndex>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OlfactometerCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BankOdorCommand.bonsai">
              <ValveIndex>0</ValveIndex>
              <BankIndex>Bank8</BankIndex>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OlfactometerCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>z pos</Name>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>100</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p3:BehaviorCommand">
              <p3:Type>SetOutput</p3:Type>
              <p3:Mask>Digital0</p3:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommandBoardA</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p3:BehaviorCommand">
              <p3:Type>ClearOutput</p3:Type>
              <p3:Mask>Digital0</p3:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommandBoardA</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeLast">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Termination</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
        <Light>
          <X>0</X>
          <Y>1</Y>
          <Z>1</Z>
        </Light>
        <FieldOfView>10</FieldOfView>
        <Eye>
          <X>-2</X>
          <Y>0</Y>
          <Z>0</Z>
        </Eye>
        <Target>
          <X>1</X>
          <Y>0</Y>
          <Z>0</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <NearClip>0.1</NearClip>
        <FarClip>1000</FarClip>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>0</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>0</TranslationZ>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ScaleZ>1</ScaleZ>
        <MeshName>ParabolicScreen</MeshName>
        <Ambient>
          <X>1</X>
          <Y>1</Y>
          <Z>1</Z>
        </Ambient>
        <Diffuse>
          <X>1</X>
          <Y>1</Y>
          <Z>1</Z>
        </Diffuse>
        <Specular>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Specular>
        <SpecularExponent>0.1</SpecularExponent>
        <RotationZ>90</RotationZ>
        <RotationY>90</RotationY>
        <RotationX>0</RotationX>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderTexture">
          <gl:RenderState />
          <gl:ClearColor>IndianRed</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:Width>4096</gl:Width>
          <gl:Height>4096</gl:Height>
          <gl:InternalFormat>Rgba</gl:InternalFormat>
          <gl:WrapS>Repeat</gl:WrapS>
          <gl:WrapT>Repeat</gl:WrapT>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>WarpQuad</gl:ShaderName>
          <gl:TextureName />
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:WarpPerspective">
          <gl:Destination>
            <gl:Point2f>
              <gl:X>-1</gl:X>
              <gl:Y>-1</gl:Y>
            </gl:Point2f>
            <gl:Point2f>
              <gl:X>-1</gl:X>
              <gl:Y>1</gl:Y>
            </gl:Point2f>
            <gl:Point2f>
              <gl:X>1</gl:X>
              <gl:Y>1</gl:Y>
            </gl:Point2f>
            <gl:Point2f>
              <gl:X>1</gl:X>
              <gl:Y>-1</gl:Y>
            </gl:Point2f>
          </gl:Destination>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateUniform">
          <gl:UniformName>transform</gl:UniformName>
          <gl:ShaderName>WarpQuad</gl:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawMesh">
          <gl:ShaderName>WarpQuad</gl:ShaderName>
          <gl:MeshName>WarpQuad</gl:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorCommandBoardA</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:PortName>COM9</harp:PortName>
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:CommandSubject.bonsai">
        <Name>BehaviorCommandBoardA</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>