WorkflowBuilder(Version=2.5.1)
Bonsai.Shaders.CreateWindow
  Width=1280
  Height=720
  VSync=On
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=false
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=4
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.MeshResources
  Meshes
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=SphereMapping, FileName=Models\SphereMapping.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=WarpQuad, QuadEffects=None)
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cylinder, FileName=Models\cylinder.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=ParabolicScreen, FileName=Models\parabolic.obj)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=CircleModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\CircleShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColorModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\colorShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=TileModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\TileShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpOutput
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\Warp.vert
      FragmentShader=BonVision:Shaders.Image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpQuad
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureName="", TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\WarpQuad.vert
      FragmentShader=Shaders\WarpQuad.frag
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=horGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\horGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> GroupWorkflow PerspectiveView(Description="Specifies a perspective view, commonly used for 3D stimulus environments.")
    WorkflowInput Source1 => #0
    ExternalizedProperty Light(MemberName=Value, Description="The position of the main point light.") => #1
    ExternalizedProperty FieldOfView(MemberName=Value)
    -> BonVision.FieldOfViewProperty(Value=110)
    -> ExternalizedProperty(MemberName=FovY) => #4
    ExternalizedMapping(Eye, Target, Up) => #5
    #0, #5 -> Bonsai.Shaders.CreateLookAt(Eye(X=0, Y=-0.1, Z=0), Target(X=-0, Y=-0, Z=-1), Up(X=0, Y=1, Z=0)) => #6
    #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=1, Z=1)) => #7
    #0 -> FloatProperty(Value=2.8)
    -> InputMapping(AspectRatio) => #9
    ExternalizedMapping(NearClip, FarClip) => #10
    #9, #4, #10 -> Bonsai.Shaders.CreatePerspectiveFieldOfView(FovY=1.91986215, AspectRatio=2.8, NearClip=0.1, FarClip=1000) => #11
    #6, #11, #7 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 as ViewMatrix,
        Item2 as ProjectionMatrix,
        Item3 as Light)
    -> WorkflowOutput
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderTexture
  RenderState=""
  ClearColor=DarkBlue
  ClearMask="DepthBufferBit ColorBufferBit"
  Width=4096
  Height=4096
  InternalFormat=Rgba
  WrapS=Repeat
  WrapT=Repeat
  MinFilter=Linear
  MagFilter=Linear
-> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D)
-> Disable Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DarkBlue, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=2048, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
-> Disable GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
    WorkflowInput Source1 => #0
    ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #1
    #0, #1 -> Bonsai.Shaders.RenderTexture
      RenderState=""
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=ClampToEdge
      WrapT=ClampToEdge
      MinFilter=Linear
      MagFilter=Linear
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMap, TextureTarget=Texture2D)
    -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMap, MeshName=SphereMapping)
    -> WorkflowOutput

    Disable ExternalizedProperty FileName(MemberName=FileName, Category="")
    -> Disable Bonsai.IO.CsvReader(FileName="", ListSeparator=",", ScanPattern=%f, SkipRows=0)
    -> Disable BonVision.CreateVertexGrid
    -> Disable Bonsai.Shaders.SampleOnRenderFrame
    -> Disable Bonsai.Shaders.UpdateVertexBuffer
      MeshName=MeshMap
      DrawMode=Quads
      Usage=DynamicDraw
      VertexAttributes(VertexAttributeMapping(Size=3, Normalized=false, Type=Float), VertexAttributeMapping(Size=3, Normalized=false, Type=Float))
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
-> Disable IncludeWorkflow
  Path=BonVision:Environment.PerspectiveView.bonsai
  Light(X=0, Y=1, Z=1)
  FieldOfView=90
  Eye(X=1, Y=1, Z=2)
  Target(X=-0, Y=-0, Z=-1)
  Up(X=0, Y=1, Z=0)
  NearClip=0.1
  FarClip=1000
-> Disable IncludeWorkflow
  Path=BonVision:Primitives.DrawModel.bonsai
  TranslationX=0
  TranslationY=0
  TranslationZ=0
  ScaleX=1
  ScaleY=1
  ScaleZ=1
  MeshName=SphereMapping
  Ambient(X=0.2, Y=0.2, Z=0.2)
  Diffuse(X=0.8, Y=0.8, Z=0.8)
  Specular(X=0.8, Y=0.8, Z=0.8)
  SpecularExponent=10
  RotationZ=0
  RotationY=0
  RotationX=0

GroupWorkflow MainRoom
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Expression) => #1
    #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: it-450
    -> PropertyMapping(TranslationZ) => #3
    ExternalizedMapping(ScaleY, TranslationY) => #4
    ExternalizedMapping(Value(DisplayName=Width))
    -> PropertySource<Bonsai.Shaders.Scale,System.Single>(MemberName=ScaleY, Value=9) => #6
    -> Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> PropertyMapping(TranslationX) => #8
    #6 -> Bonsai.Scripting.ExpressionTransform
      Expression: it/2
    -> PropertyMapping(TranslationX) => #10
    #6 -> PropertyMapping(ScaleX) => #11
    #3, #11 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn4, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=Extensions\DrawStripeModel.bonsai
          TranslationX=0
          TranslationY=-3
          TranslationZ=-380.51416
          ScaleX=9
          ScaleY=900
          ScaleZ=0
          RotationZ=0
          RotationY=0
          RotationX=90
          ShaderName=ColorModel
          MeshName=Plane
          Scale(X=1, Y=1)
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
        -> WorkflowOutput
    #2, #4, #8 -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it-0
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(ScaleY) => #3
        ExternalizedMapping(TranslationY) => #4
        ExternalizedMapping(TranslationX) => #5
        #2, #3, #4, #5 -> GroupWorkflow Left1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4.5
              TranslationY=0.5
              TranslationZ=-380.51416
              ScaleX=100
              ScaleY=7
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-250
        -> PropertyMapping(TranslationZ(Selector=it)) => #8
        #8, #3, #4, #5 -> GroupWorkflow Left2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn3, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=Extensions\DrawShaderModel.bonsai
              TranslationX=-4.5
              TranslationY=0.5
              TranslationZ=-630.51416
              ScaleX=400
              ScaleY=7
              ScaleZ=0
              RotationZ=0
              RotationY=90
              RotationX=0
              ShaderName=CircleModel
              MeshName=Plane
              CircleRadius=0.8
              Scale(X=40, Y=1)
              Color(X=0, Y=0, Z=0, W=1)
              BackColor(X=0.8, Y=0.8, Z=0.8, W=1)
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it+250
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #3, #4, #5 -> GroupWorkflow Left0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn3, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=Extensions\DrawShaderModel.bonsai
              TranslationX=-4.5
              TranslationY=0.5
              TranslationZ=-130.51416
              ScaleX=400
              ScaleY=7
              ScaleZ=0
              RotationZ=0
              RotationY=90
              RotationX=0
              ShaderName=CircleModel
              MeshName=Plane
              CircleRadius=0.8
              Scale(X=40, Y=1)
              Color(X=0, Y=0, Z=0, W=1)
              BackColor(X=0.8, Y=0.8, Z=0.8, W=1)
            -> WorkflowOutput
    #2, #4, #10 -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it-0
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(ScaleY) => #3
        ExternalizedMapping(TranslationY) => #4
        ExternalizedMapping(TranslationX) => #5
        #2, #3, #4, #5 -> GroupWorkflow Right1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4.5
              TranslationY=0.5
              TranslationZ=-380.51416
              ScaleX=100
              ScaleY=7
              ScaleZ=0
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-250
        -> PropertyMapping(TranslationZ(Selector=it)) => #8
        #8, #3, #4, #5 -> GroupWorkflow Right2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn3, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=Extensions\DrawShaderModel.bonsai
              TranslationX=4.5
              TranslationY=0.5
              TranslationZ=-630.51416
              ScaleX=400
              ScaleY=7
              ScaleZ=0
              RotationZ=0
              RotationY=90
              RotationX=0
              ShaderName=CircleModel
              MeshName=Plane
              CircleRadius=0.8
              Scale(X=40, Y=1)
              Color(X=0, Y=0, Z=0, W=1)
              BackColor(X=0.8, Y=0.8, Z=0.8, W=1)
            -> WorkflowOutput
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it+250
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #3, #4, #5 -> GroupWorkflow Right0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn3, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=Extensions\DrawShaderModel.bonsai
              TranslationX=4.5
              TranslationY=0.5
              TranslationZ=-130.51416
              ScaleX=400
              ScaleY=7
              ScaleZ=0
              RotationZ=0
              RotationY=90
              RotationX=0
              ShaderName=CircleModel
              MeshName=Plane
              CircleRadius=0.8
              Scale(X=40, Y=1)
              Color(X=0, Y=0, Z=0, W=1)
              BackColor(X=0.8, Y=0.8, Z=0.8, W=1)
            -> WorkflowOutput
    #2 -> GroupWorkflow Towers
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it+450-70-160-150
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        ExternalizedMapping(ScaleY) => #3
        ExternalizedMapping(TranslationY) => #4
        ExternalizedMapping(TranslationX) => #5
        #2, #3, #4, #5 -> IncludeWorkflow
          Path=Extensions\Tower.bonsai
          frequency(X=1, Y=24)
          RotationZ=0
          RotationX=0
          ScaleY=66
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
          ShaderName=TileModel
          TextureName=fwn3
          TranslationY=30
          TranslationX=10.56
          TranslationZ=-310.51416
          ScaleX=12
          RotationY=1.57079637
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it+450-70-160
        -> PropertyMapping(TranslationZ(Selector=it)) => #8
        #8, #3, #4, #5 -> IncludeWorkflow
          Path=Extensions\Tower.bonsai
          frequency(X=8, Y=1)
          RotationZ=0
          RotationX=0
          ScaleY=66
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
          ShaderName=TileModel
          TextureName=fwn3
          TranslationY=30
          TranslationX=10.56
          TranslationZ=-160.51416
          ScaleX=12
          RotationY=1.57079637
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it+450-70
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #3, #4, #5 -> IncludeWorkflow
          Path=Extensions\Tower.bonsai
          frequency(X=2, Y=8)
          RotationZ=0
          RotationX=0
          ScaleY=66
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
          ShaderName=TileModel
          TextureName=fwn3
          TranslationY=30
          TranslationX=10.56
          TranslationZ=-0.514160156
          ScaleX=12
          RotationY=1.57079637
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-50-70-160-150
        -> PropertyMapping(TranslationZ(Selector=it)) => #14
        #14, #3, #4, #5 -> IncludeWorkflow
          Path=Extensions\Tower.bonsai
          frequency(X=1, Y=24)
          RotationZ=0
          RotationX=0
          ScaleY=66
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
          ShaderName=TileModel
          TextureName=fwn3
          TranslationY=30
          TranslationX=10.56
          TranslationZ=-810.51416
          ScaleX=12
          RotationY=1.57079637
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-50-70-160
        -> PropertyMapping(TranslationZ(Selector=it)) => #17
        #17, #3, #4, #5 -> IncludeWorkflow
          Path=Extensions\Tower.bonsai
          frequency(X=8, Y=1)
          RotationZ=0
          RotationX=0
          ScaleY=66
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
          ShaderName=TileModel
          TextureName=fwn3
          TranslationY=30
          TranslationX=10.56
          TranslationZ=-660.51416
          ScaleX=12
          RotationY=1.57079637
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it-50-70
        -> PropertyMapping(TranslationZ(Selector=it)) => #20
        #20, #3, #4, #5 -> IncludeWorkflow
          Path=Extensions\Tower.bonsai
          frequency(X=2, Y=8)
          RotationZ=0
          RotationX=0
          ScaleY=66
          Color(X=0, Y=0, Z=0, W=1)
          BackColor(X=1, Y=1, Z=1, W=1)
          ShaderName=TileModel
          TextureName=fwn3
          TranslationY=30
          TranslationX=10.56
          TranslationZ=-500.51416
          ScaleX=12
          RotationY=1.57079637

Disable GroupWorkflow Texture1
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Expression) => #1
    #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: it+20
    -> PropertyMapping(TranslationZ) => #3
    ExternalizedMapping(TextureName) => #4
    #3, #4 -> GroupWorkflow Ceil
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=5.98
          TranslationZ=-80
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #6
    #6, #4 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1.98
          TranslationZ=-80
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #8
    #8, #4 -> GroupWorkflow Right
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=3.88
          TranslationY=2
          TranslationZ=-80
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
    #10, #4 -> GroupWorkflow Left
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-3.88
          TranslationY=2
          TranslationZ=-80
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput

Disable GroupWorkflow Texture2
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Expression) => #1
    #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: it+40
    -> PropertyMapping(TranslationZ) => #3
    ExternalizedMapping(TextureName) => #4
    #3, #4 -> GroupWorkflow Ceil
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=5.98
          TranslationZ=-60
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #6
    #6, #4 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1.98
          TranslationZ=-60
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #8
    #8, #4 -> GroupWorkflow Right
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=3.977
          TranslationY=2
          TranslationZ=-60
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
    #10, #4 -> GroupWorkflow Left
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-3.88
          TranslationY=2
          TranslationZ=-60
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput

Disable GroupWorkflow Texture3
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Expression) => #1
    #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: it+60
    -> PropertyMapping(TranslationZ) => #3
    ExternalizedMapping(TextureName) => #4
    #3, #4 -> GroupWorkflow Ceil
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=5.98
          TranslationZ=-40
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #6
    #6, #4 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1.98
          TranslationZ=-40
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #8
    #8, #4 -> GroupWorkflow Right
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=3.97
          TranslationY=2
          TranslationZ=-40
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
    #10, #4 -> GroupWorkflow Left
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-3.88
          TranslationY=2
          TranslationZ=-40
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput

Disable GroupWorkflow Texture4
    SubscribeSubject "z pos" => #0
    ExternalizedMapping(Expression) => #1
    #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: it+80
    -> PropertyMapping(TranslationZ) => #3
    ExternalizedMapping(TextureName) => #4
    #3, #4 -> GroupWorkflow Ceil
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=5.98
          TranslationZ=-20
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #6
    #6, #4 -> GroupWorkflow Floor
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1.98
          TranslationZ=-20
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=-90
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ) => #8
    #8, #4 -> GroupWorkflow Right
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=3.97
          TranslationY=2
          TranslationZ=-20
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput
    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
    #10, #4 -> GroupWorkflow Left
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
        ExternalizedMapping(TextureName) => #2
        #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
        #3, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-3.88
          TranslationY=2
          TranslationZ=-20
          ScaleX=8
          ScaleY=8
          ScaleZ=8
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput

FloatProperty(Value=0)
-> IgnoreElements
-> BehaviorSubject "z pos"

DoubleProperty(Value=0)
-> BehaviorSubject TurnPos

FloatProperty(Value=0)
-> IgnoreElements
-> BehaviorSubject Encoder

StringProperty
-> IgnoreElements
-> BehaviorSubject OlfactometerCommands

SubscribeSubject OlfactometerCommands
-> DeviceTCPClient(Port=3336, IPAddress=192.168.5.16)
-> PublishSubject OlfactometerEvents

Disable GroupWorkflow EncoderCsvReader
    Bonsai.IO.CsvReader(FileName=Data\EncoderTestData5v.csv, ScanPattern=%d, SkipRows=0) => #0
    Timer(DueTime=PT0S, Period=PT0.01S)
    -> SelectMany
        Range(Start=0, Count=10)
        -> WorkflowOutput
    -> Condition => #3
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    #0, #3 -> Zip
    -> MemberSelector(Selector=Item1)
    -> IncludeWorkflow(Path=Extensions\TurnPositionCalculation.bonsai) => #6
    ExternalizedMapping(RangeMax(DisplayName=WheelPerimeter)) => #7
    #6, #7 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=62.8318, RescaleType=Linear)
    -> MulticastSubject Encoder
    -> WorkflowOutput

Disable GroupWorkflow MouseEncoder
    Bonsai.Shaders.Input.MouseCursor
    -> MemberSelector(Selector=WheelPrecise) => #1
    -> Take(Count=1) => #2
    #1, #2 -> CombineLatest
    -> Subtract => #4
    ExternalizedMapping(Value(DisplayName=Gain)) => #5
    #4, #5 -> Multiply(Operand=DoubleProperty(Value=0.5))
    -> MulticastSubject Encoder
    -> WorkflowOutput

GroupWorkflow HarpEncoder
    Bonsai.Harp.Device(PortName=COM3, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false)
    -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0)
    -> Bonsai.IO.CsvWriter(FileName=Data\EncoderTestData5v.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)
    -> IncludeWorkflow(Path=Extensions\TurnPositionCalculation.bonsai) => #3
    ExternalizedMapping(RangeMax(DisplayName=WheelPerimeter)) => #4
    #3, #4 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=62.8318, RescaleType=Linear)
    -> MulticastSubject Encoder
    -> WorkflowOutput

Timer(DueTime=PT0S, Period=PT0S)
-> SelectMany Initialize
    WorkflowInput Source1 => #0
    ExternalizedMapping(Value(DisplayName=OlfacBank))
    -> StringProperty(Value=Bank8) => #2
    -> PropertyMapping(BankIndex) => #3
    #2 -> PropertyMapping(BankIndex) => #4
    #0, #4 -> IncludeWorkflow(Path=Extensions\BankFlowCommand.bonsai, BankIndex=Bank8, FlowRate=100)
    -> MulticastSubject OlfactometerCommands
    -> WorkflowOutput
    #0, #3 -> IncludeWorkflow(Path=Extensions\BankOdorCommand.bonsai, ValveIndex=0, BankIndex=Bank8)
    -> MulticastSubject OlfactometerCommands
    #0 -> IntProperty(Value=10)
    -> Disable Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=5000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(AnalogOutputChannelConfiguration(ChannelName=FlowSensor, MinimumValue=0, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
-> TakeLast(Count=1)
-> SelectMany RunTime
    Disable GroupWorkflow Movement
        SubscribeSubject Encoder
        -> Accumulate
        -> TakeWhile
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Repeat
        -> Add(Operand=DoubleProperty(Value=0))
        -> Bonsai.Scripting.ExpressionTransform
          Expression: single(it)
        -> MulticastSubject "z pos"
        -> TakeWhile
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> LessThan(Operand=FloatProperty(Value=500))
            -> WorkflowOutput
        -> Unit
        -> WorkflowOutput

    GroupWorkflow Movement
        SubscribeSubject Encoder => #0
        -> Take(Count=1) => #1
        #0, #1 -> CombineLatest
        -> Subtract
        -> TakeWhile
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Repeat
        -> Add(Operand=DoubleProperty(Value=0))
        -> Bonsai.Scripting.ExpressionTransform
          Expression: single(it)
        -> MulticastSubject "z pos"
        -> TakeWhile
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> LessThan(Operand=FloatProperty(Value=500))
            -> WorkflowOutput
        -> Unit
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> RepeatCount(Count=1000) => #3
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> Add(Operand=IntProperty(Value=2))
    -> MulticastSubject TrialNumber
    #3 -> Last
    -> WorkflowOutput

    SubscribeSubject "z pos" => #10
    ExternalizedMapping(Value(DisplayName=OdorALocation)) => #11
    #10, #11 -> GreaterThanOrEqual(Operand=FloatProperty(Value=150))
    -> DistinctUntilChanged
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject OdorA
        -> PropertyMapping(Value) => #2
        #0, #2 -> BooleanProperty(Value=false)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\BankOdorCommand.bonsai, ValveIndex=7, BankIndex=Bank8)
    -> MulticastSubject OlfactometerCommands => #17
    ExternalizedMapping(DueTime(DisplayName=StimulusDuration)) => #18
    #17, #18 -> Delay(DueTime=PT0.5S)
    -> IncludeWorkflow(Path=Extensions\BankOdorCommand.bonsai, ValveIndex=0, BankIndex=Bank8)
    -> MulticastSubject OlfactometerCommands

    SubscribeSubject "z pos" => #22
    ExternalizedMapping(Value(DisplayName=RewardLocation)) => #23
    #22, #23 -> GreaterThanOrEqual(Operand=FloatProperty(Value=300))
    -> DistinctUntilChanged
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject Reward
        -> PropertyMapping(Value) => #2
        #0, #2 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoardA => #29
    ExternalizedMapping(DueTime(DisplayName=RewardDuration)) => #30
    #29, #30 -> Delay(DueTime=PT0.2S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoardA
-> TakeLast(Count=1)
-> SelectMany Termination
    WorkflowInput Source1 => #0
    -> IncludeWorkflow(Path=Extensions\BankFlowCommand.bonsai, BankIndex=Bank8, FlowRate=0)
    -> MulticastSubject OlfactometerCommands
    -> WorkflowOutput
    #0 -> IncludeWorkflow(Path=Extensions\BankOdorCommand.bonsai, ValveIndex=0, BankIndex=Bank8)
    -> MulticastSubject OlfactometerCommands
    #0 -> IntProperty(Value=0)
    -> Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=5000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(AnalogOutputChannelConfiguration(ChannelName=FlowSensor, MinimumValue=0, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow
  Path=BonVision:Environment.PerspectiveView.bonsai
  Light(X=0, Y=1, Z=1)
  FieldOfView=10
  Eye(X=-2, Y=0, Z=0)
  Target(X=1, Y=0, Z=0)
  Up(X=0, Y=1, Z=0)
  NearClip=0.1
  FarClip=1000
-> IncludeWorkflow
  Path=BonVision:Primitives.DrawTexturedModel.bonsai
  TranslationX=0
  TranslationY=0
  TranslationZ=0
  ScaleX=1
  ScaleY=1
  ScaleZ=1
  MeshName=ParabolicScreen
  Ambient(X=1, Y=1, Z=1)
  Diffuse(X=1, Y=1, Z=1)
  Specular(X=0, Y=0, Z=0)
  SpecularExponent=0.1
  RotationZ=90
  RotationY=90
  RotationX=0
-> Bonsai.Shaders.RenderTexture
  RenderState=""
  ClearColor=IndianRed
  ClearMask="DepthBufferBit ColorBufferBit"
  Width=4096
  Height=4096
  InternalFormat=Rgba
  WrapS=Repeat
  WrapT=Repeat
  MinFilter=Linear
  MagFilter=Linear
-> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=WarpQuad, TextureName="", TextureTarget=Texture2D)
-> Bonsai.Shaders.WarpPerspective(Destination(Point2f(X=-1, Y=-1), Point2f(X=-1, Y=1), Point2f(X=1, Y=1), Point2f(X=1, Y=-1)))
-> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=WarpQuad)
-> Bonsai.Shaders.DrawMesh(ShaderName=WarpQuad, MeshName=WarpQuad)

SubscribeSubject BehaviorCommandBoardA
-> Bonsai.Harp.Device(PortName=COM9, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false)
-> MemberSelector(Selector=MessageBytes)
-> Disable Bonsai.Dsp.MatrixWriter(Path=Data\Demo\rawbreathing, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default, NumBuffers=10, GrabMode=BufferFrames) => #59
-> MemberSelector(Selector="Metadata.embeddedTimeStamp,Metadata.embeddedFrameCounter") => #60
#59 -> MemberSelector(Selector=Metadata.embeddedFrameCounter) => #61
#59 -> Bonsai.PointGrey.GpioPinState
-> MemberSelector(Selector=Val0) => #63
#60, #61, #63 -> Zip
-> Disable Bonsai.IO.CsvWriter(FileName=Data\Demo\temp.csv, Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true, CompatibilityMode=true)
#59 -> MemberSelector(Selector=Image) => #66
Bonsai.Video.ScreenCaptureStream(HideCursor=false, CaptureRegion(X=1024, Y=0, Width=1280, Height=720), FrameInterval=0) => #67
#66, #67 -> WithLatestFrom => #68
-> MemberSelector(Selector=Item1)
-> Disable Bonsai.Vision.VideoWriter
  FileName=Data\Demo\Camera.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=true
  FourCC=FMP4
  FrameRate=60
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
#68 -> MemberSelector(Selector=Item2)
-> Disable Bonsai.Vision.VideoWriter
  FileName=Data\Demo\VR.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=true
  FourCC=FMP4
  FrameRate=60
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor

IncludeWorkflow BehaviorCommandBoardA(Path=Bonsai.Harp:CommandSubject.bonsai)

Bonsai.Windows.Input.KeyDown(Filter=F11, SuppressRepetitions=false)
-> Bonsai.Harp.CF.CameraCommand(Type=StartCamera0) => #75
Bonsai.Windows.Input.KeyDown(Filter=F12, SuppressRepetitions=false)
-> Bonsai.Harp.CF.CameraCommand(Type=StopCamera0) => #77
#75, #77 -> Merge
-> Bonsai.Harp.Device(PortName=COM4, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Enable, IgnoreErrors=false)
-> MemberSelector(Selector=MessageBytes)
-> Disable Bonsai.Dsp.MatrixWriter(Path=Data\Demo\cameracontroldata, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
#77 -> Delay(DueTime=PT5S)
-> Take(Count=1)

GroupWorkflow "Trial Structure"(Description="Uses the trial number to toggle Stimulus and Reward on/off.")
    ExternalizedMapping(FileName(DisplayName=Protocol))
    -> Bonsai.IO.CsvReader(FileName=Protocols\protocol1.csv, ScanPattern="%h, %h, %h, %h, %h", SkipRows=0) => #1
    SubscribeSubject TrialNumber => #2
    #1, #2 -> Zip
    -> MemberSelector(Selector=Item1)
    -> DistinctUntilChanged => #5
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.PythonTransform ConvertToBool
      Script:
        @returns(bool)
        def process(value):
          return value
    -> MulticastSubject Reward
    #5 -> MemberSelector(Selector=Item2)
    -> Bonsai.Scripting.PythonTransform ConvertToBool
      Script:
        @returns(bool)
        def process(value):
          return value
    -> MulticastSubject OdorA
    #5 -> MemberSelector(Selector=Item3)
    -> Bonsai.Scripting.PythonTransform ConvertToBool
      Script:
        @returns(bool)
        def process(value):
          return value
    -> MulticastSubject OdorB
    #5 -> MemberSelector(Selector=Item4)
    -> Bonsai.Scripting.PythonTransform ConvertToBool
      Script:
        @returns(bool)
        def process(value):
          return value
    -> MulticastSubject OdorC
    #5 -> MemberSelector(Selector=Item5)
    -> Bonsai.Scripting.PythonTransform ConvertToBool
      Script:
        @returns(bool)
        def process(value):
          return value
    -> MulticastSubject OdorD

BooleanProperty(Value=false)
-> IgnoreElements => #86
-> BehaviorSubject Reward
#86 -> BehaviorSubject OdorA
#86 -> BehaviorSubject OdorB
#86 -> BehaviorSubject OdorC
#86 -> BehaviorSubject OdorD

IntProperty(Value=1)
-> BehaviorSubject TrialNumber
