<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:OpenTK;assembly=OpenTK"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>DimGray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>SphereMapping</gl:Name>
              <gl:FileName>Models\SphereMapping.obj</gl:FileName>
            </gl:MeshConfiguration>
            <gl:MeshConfiguration xsi:type="gl:TexturedQuad">
              <gl:Name>WarpQuad</gl:Name>
              <gl:QuadEffects>None</gl:QuadEffects>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>CircleModel</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\ShaderModel.vert</gl:VertexShader>
              <gl:FragmentShader>Shaders\CircleShader.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>ColorModel</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\ShaderModel.vert</gl:VertexShader>
              <gl:FragmentShader>Shaders\colorShader.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>WarpOutput</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings>
                <gl:BufferBinding xsi:type="gl:TextureBinding">
                  <gl:Name>tex</gl:Name>
                  <gl:TextureSlot>Texture0</gl:TextureSlot>
                  <gl:TextureTarget>Texture2D</gl:TextureTarget>
                </gl:BufferBinding>
              </gl:BufferBindings>
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\Warp.vert</gl:VertexShader>
              <gl:FragmentShader>BonVision:Shaders.Image.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>WarpQuad</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings>
                <gl:BufferBinding xsi:type="gl:TextureBinding">
                  <gl:Name>tex</gl:Name>
                  <gl:TextureSlot>Texture0</gl:TextureSlot>
                  <gl:TextureName />
                  <gl:TextureTarget>Texture2D</gl:TextureTarget>
                </gl:BufferBinding>
              </gl:BufferBindings>
              <gl:FramebufferAttachments />
              <gl:VertexShader>Shaders\WarpQuad.vert</gl:VertexShader>
              <gl:FragmentShader>Shaders\WarpQuad.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
          </gl:Shaders>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>plaid</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\plaid.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>vertGrat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\vertGrat.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>fwn1</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\fwn1.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>fwn2</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\fwn2.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>fwn3</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\fwn3.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>fwn4</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\fwn4.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>grayEnd</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\grayEnd.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>horGrat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\horGrat.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>gray</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\gray.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateRenderState">
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:DepthFunctionState">
              <gl:Function>Less</gl:Function>
            </gl:StateConfiguration>
          </gl:RenderState>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateCubemapCamera">
          <gl:Eye>
            <gl:X>0</gl:X>
            <gl:Y>0</gl:Y>
            <gl:Z>0</gl:Z>
          </gl:Eye>
          <gl:NearClip>0.1</gl:NearClip>
          <gl:FarClip>1000</gl:FarClip>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
ViewMatrix as ViewMatrix,
ProjectionMatrix as ProjectionMatrix,
ViewMatrix.Row3.Yzw as Light)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Draw3DStim</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderCubemap">
          <gl:RenderState />
          <gl:ClearColor>DarkBlue</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:FaceSize>2048</gl:FaceSize>
          <gl:InternalFormat>Rgb</gl:InternalFormat>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.MeshMapping.bonsai">
        <ClearColor>Gray</ClearColor>
        <FileName>Shaders\MeshMapping.csv</FileName>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>MeshMapping</Name>
          <Description>Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.</Description>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>MainRoom</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>z pos</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Expression" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it-450</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationZ" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ScaleY" />
              <Property Name="TranslationY" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Width" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="gl:Scale,sys:Single">
              <MemberName>ScaleY</MemberName>
              <Value>20</Value>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>-it/2</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it/2</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ScaleX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Floor</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw3DStim</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationZ" />
                    <Property Name="TranslationX" />
                    <Property Name="TranslationY" />
                    <Property Name="RotationZ" />
                    <Property Name="RotationY" />
                    <Property Name="RotationX" />
                    <Property Name="ScaleX" />
                    <Property Name="ScaleY" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TextureName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture0</gl:TextureSlot>
                      <gl:ShaderName>TexturedModel</gl:ShaderName>
                      <gl:TextureName>fwn4</gl:TextureName>
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DrawStripeModel</Name>
                    <Description>Draws a textured and transformed 3D model stimulus.</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ViewMatrix</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="X" DisplayName="TranslationX" />
                          <Property Name="Y" DisplayName="TranslationY" />
                          <Property Name="Z" DisplayName="TranslationZ" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Translate">
                            <gl:Order>Prepend</gl:Order>
                            <gl:X>0</gl:X>
                            <gl:Y>-3</gl:Y>
                            <gl:Z>-460</gl:Z>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="X" DisplayName="ScaleX" />
                          <Property Name="Y" DisplayName="ScaleY" />
                          <Property Name="Z" DisplayName="ScaleZ" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="RotationZ" Description="The rotation about the z-axis." />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="bv:AngleProperty">
                            <bv:Value>0</bv:Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Angle" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:RotateZ">
                            <gl:Order>Prepend</gl:Order>
                            <gl:Angle>0</gl:Angle>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="RotationY" Description="The rotation about the y-axis." />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="bv:AngleProperty">
                            <bv:Value>0</bv:Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Angle" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:RotateY">
                            <gl:Order>Prepend</gl:Order>
                            <gl:Angle>0</gl:Angle>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="RotationX" Description="The rotation about the x-axis." />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="bv:AngleProperty">
                            <bv:Value>90</bv:Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Angle" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:RotateX">
                            <gl:Order>Prepend</gl:Order>
                            <gl:Angle>1.57079637</gl:Angle>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Scale">
                            <gl:Order>Prepend</gl:Order>
                            <gl:X>20</gl:X>
                            <gl:Y>900</gl:Y>
                            <gl:Z>0</gl:Z>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="ShaderName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:UpdateUniform">
                            <gl:UniformName>modelview</gl:UniformName>
                            <gl:ShaderName>ColorModel</gl:ShaderName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ProjectionMatrix</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="MeshName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:UpdateUniform">
                            <gl:UniformName>projection</gl:UniformName>
                            <gl:ShaderName>ColorModel</gl:ShaderName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Scale" />
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="gl:CreateMatrix2,p1:Vector2">
                          <MemberName>Row1</MemberName>
                          <Value>
                            <X>1</X>
                            <Y>1</Y>
                          </Value>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:UpdateUniform">
                            <gl:UniformName>scale</gl:UniformName>
                            <gl:ShaderName>ColorModel</gl:ShaderName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Color" />
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="gl:CreateMatrix4,p1:Vector4">
                          <MemberName>Row0</MemberName>
                          <Value>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                            <W>1</W>
                          </Value>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:UpdateUniform">
                            <gl:UniformName>color</gl:UniformName>
                            <gl:ShaderName>ColorModel</gl:ShaderName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="BackColor" />
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="gl:CreateMatrix4,p1:Vector4">
                          <MemberName>Row0</MemberName>
                          <Value>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                            <W>1</W>
                          </Value>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:UpdateUniform">
                            <gl:UniformName>backColor</gl:UniformName>
                            <gl:ShaderName>ColorModel</gl:ShaderName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:DrawMesh">
                            <gl:ShaderName>ColorModel</gl:ShaderName>
                            <gl:MeshName>Plane</gl:MeshName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="20" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="8" Label="Source1" />
                        <Edge From="4" To="17" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="12" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="16" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="19" Label="Source1" />
                        <Edge From="18" To="19" Label="Source2" />
                        <Edge From="18" To="33" Label="Source2" />
                        <Edge From="18" To="22" Label="Source2" />
                        <Edge From="18" To="26" Label="Source2" />
                        <Edge From="18" To="29" Label="Source2" />
                        <Edge From="18" To="32" Label="Source2" />
                        <Edge From="19" To="23" Label="Source1" />
                        <Edge From="20" To="22" Label="Source1" />
                        <Edge From="21" To="33" Label="Source3" />
                        <Edge From="22" To="23" Label="Source2" />
                        <Edge From="23" To="25" Label="Source1" />
                        <Edge From="24" To="25" Label="Source2" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="28" Label="Source1" />
                        <Edge From="27" To="28" Label="Source2" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="29" To="31" Label="Source1" />
                        <Edge From="30" To="31" Label="Source2" />
                        <Edge From="31" To="32" Label="Source1" />
                        <Edge From="32" To="33" Label="Source1" />
                        <Edge From="33" To="34" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LeftWall</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it-0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ScaleY" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationY" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationX" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Left1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw3DStim</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TranslationZ" />
                          <Property Name="TranslationX" />
                          <Property Name="TranslationY" />
                          <Property Name="RotationZ" />
                          <Property Name="RotationY" />
                          <Property Name="RotationX" />
                          <Property Name="ScaleX" />
                          <Property Name="ScaleY" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>TexturedModel</gl:ShaderName>
                            <gl:TextureName>gray</gl:TextureName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
                          <TranslationX>-10</TranslationX>
                          <TranslationY>3</TranslationY>
                          <TranslationZ>-460</TranslationZ>
                          <ScaleX>100</ScaleX>
                          <ScaleY>12.0001</ScaleY>
                          <ScaleZ>0</ScaleZ>
                          <MeshName>Plane</MeshName>
                          <Ambient>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                          </Ambient>
                          <Diffuse>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                          </Diffuse>
                          <Specular>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                          </Specular>
                          <SpecularExponent>10</SpecularExponent>
                          <RotationZ>0</RotationZ>
                          <RotationY>90</RotationY>
                          <RotationX>0</RotationX>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it-250</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Left2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw3DStim</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TranslationZ" />
                          <Property Name="TranslationX" />
                          <Property Name="TranslationY" />
                          <Property Name="RotationZ" />
                          <Property Name="RotationY" />
                          <Property Name="RotationX" />
                          <Property Name="ScaleX" />
                          <Property Name="ScaleY" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>TexturedModel</gl:ShaderName>
                            <gl:TextureName>fwn3</gl:TextureName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawShaderModel.bonsai">
                          <TranslationX>-10</TranslationX>
                          <TranslationY>3</TranslationY>
                          <TranslationZ>-710</TranslationZ>
                          <ScaleX>400</ScaleX>
                          <ScaleY>12</ScaleY>
                          <ScaleZ>0</ScaleZ>
                          <RotationZ>0</RotationZ>
                          <RotationY>90</RotationY>
                          <RotationX>0</RotationX>
                          <ShaderName>CircleModel</ShaderName>
                          <MeshName>Plane</MeshName>
                          <CircleRadius>0.8</CircleRadius>
                          <Scale>
                            <X>40</X>
                            <Y>1</Y>
                          </Scale>
                          <Color>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                            <W>1</W>
                          </Color>
                          <BackColor>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                            <W>1</W>
                          </BackColor>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it+250</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Left0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw3DStim</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TranslationZ" />
                          <Property Name="TranslationX" />
                          <Property Name="TranslationY" />
                          <Property Name="RotationZ" />
                          <Property Name="RotationY" />
                          <Property Name="RotationX" />
                          <Property Name="ScaleX" />
                          <Property Name="ScaleY" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>TexturedModel</gl:ShaderName>
                            <gl:TextureName>fwn3</gl:TextureName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawShaderModel.bonsai">
                          <TranslationX>-10</TranslationX>
                          <TranslationY>3</TranslationY>
                          <TranslationZ>-210</TranslationZ>
                          <ScaleX>400</ScaleX>
                          <ScaleY>12</ScaleY>
                          <ScaleZ>0</ScaleZ>
                          <RotationZ>0</RotationZ>
                          <RotationY>90</RotationY>
                          <RotationX>0</RotationX>
                          <ShaderName>CircleModel</ShaderName>
                          <MeshName>Plane</MeshName>
                          <CircleRadius>0.8</CircleRadius>
                          <Scale>
                            <X>40</X>
                            <Y>1</Y>
                          </Scale>
                          <Color>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                            <W>1</W>
                          </Color>
                          <BackColor>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                            <W>1</W>
                          </BackColor>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="0" To="10" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="3" To="9" Label="Source2" />
                  <Edge From="3" To="12" Label="Source2" />
                  <Edge From="4" To="6" Label="Source3" />
                  <Edge From="4" To="9" Label="Source3" />
                  <Edge From="4" To="12" Label="Source3" />
                  <Edge From="5" To="6" Label="Source4" />
                  <Edge From="5" To="9" Label="Source4" />
                  <Edge From="5" To="12" Label="Source4" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>RightWall</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it-0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ScaleY" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationY" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationX" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Right1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw3DStim</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TranslationZ" />
                          <Property Name="TranslationX" />
                          <Property Name="TranslationY" />
                          <Property Name="RotationZ" />
                          <Property Name="RotationY" />
                          <Property Name="RotationX" />
                          <Property Name="ScaleX" />
                          <Property Name="ScaleY" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>TexturedModel</gl:ShaderName>
                            <gl:TextureName>gray</gl:TextureName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
                          <TranslationX>10</TranslationX>
                          <TranslationY>3</TranslationY>
                          <TranslationZ>-460</TranslationZ>
                          <ScaleX>100</ScaleX>
                          <ScaleY>12.0001</ScaleY>
                          <ScaleZ>0</ScaleZ>
                          <MeshName>Plane</MeshName>
                          <Ambient>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                          </Ambient>
                          <Diffuse>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                          </Diffuse>
                          <Specular>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                          </Specular>
                          <SpecularExponent>10</SpecularExponent>
                          <RotationZ>0</RotationZ>
                          <RotationY>90</RotationY>
                          <RotationX>0</RotationX>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it-250</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Right2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw3DStim</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TranslationZ" />
                          <Property Name="TranslationX" />
                          <Property Name="TranslationY" />
                          <Property Name="RotationZ" />
                          <Property Name="RotationY" />
                          <Property Name="RotationX" />
                          <Property Name="ScaleX" />
                          <Property Name="ScaleY" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>TexturedModel</gl:ShaderName>
                            <gl:TextureName>fwn3</gl:TextureName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawShaderModel.bonsai">
                          <TranslationX>10</TranslationX>
                          <TranslationY>3</TranslationY>
                          <TranslationZ>-710</TranslationZ>
                          <ScaleX>400</ScaleX>
                          <ScaleY>12.0001</ScaleY>
                          <ScaleZ>0</ScaleZ>
                          <RotationZ>0</RotationZ>
                          <RotationY>90</RotationY>
                          <RotationX>0</RotationX>
                          <ShaderName>CircleModel</ShaderName>
                          <MeshName>Plane</MeshName>
                          <CircleRadius>0.8</CircleRadius>
                          <Scale>
                            <X>40</X>
                            <Y>1</Y>
                          </Scale>
                          <Color>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                            <W>1</W>
                          </Color>
                          <BackColor>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                            <W>1</W>
                          </BackColor>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it+250</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TranslationZ" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Right0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw3DStim</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TranslationZ" />
                          <Property Name="TranslationX" />
                          <Property Name="TranslationY" />
                          <Property Name="RotationZ" />
                          <Property Name="RotationY" />
                          <Property Name="RotationX" />
                          <Property Name="ScaleX" />
                          <Property Name="ScaleY" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TextureName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>TexturedModel</gl:ShaderName>
                            <gl:TextureName>fwn3</gl:TextureName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawShaderModel.bonsai">
                          <TranslationX>10</TranslationX>
                          <TranslationY>3</TranslationY>
                          <TranslationZ>-210</TranslationZ>
                          <ScaleX>400</ScaleX>
                          <ScaleY>12.0001</ScaleY>
                          <ScaleZ>0</ScaleZ>
                          <RotationZ>0</RotationZ>
                          <RotationY>90</RotationY>
                          <RotationX>0</RotationX>
                          <ShaderName>CircleModel</ShaderName>
                          <MeshName>Plane</MeshName>
                          <CircleRadius>0.8</CircleRadius>
                          <Scale>
                            <X>40</X>
                            <Y>1</Y>
                          </Scale>
                          <Color>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                            <W>1</W>
                          </Color>
                          <BackColor>
                            <X>1</X>
                            <Y>1</Y>
                            <Z>1</Z>
                            <W>1</W>
                          </BackColor>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="0" To="10" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="3" To="9" Label="Source2" />
                  <Edge From="3" To="12" Label="Source2" />
                  <Edge From="4" To="6" Label="Source3" />
                  <Edge From="4" To="9" Label="Source3" />
                  <Edge From="4" To="12" Label="Source3" />
                  <Edge From="5" To="6" Label="Source4" />
                  <Edge From="5" To="9" Label="Source4" />
                  <Edge From="5" To="12" Label="Source4" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="13" Label="Source1" />
            <Edge From="2" To="14" Label="Source1" />
            <Edge From="3" To="12" Label="Source1" />
            <Edge From="4" To="13" Label="Source2" />
            <Edge From="4" To="14" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="13" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="14" Label="Source3" />
            <Edge From="11" To="12" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Texture1</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Texture2</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Texture3</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Texture4</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>z pos</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>MouseEncoder</Name>
        <Description>Mouse Encoder</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gli:MouseCursor" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>WheelPrecise</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Gain" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Encoder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:IgnoreElements" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>OlfactometerCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OlfactometerCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:DeviceTCPClient">
          <p2:Port>1234</p2:Port>
          <p2:IPAddress>localhost</p2:IPAddress>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>OlfactometerEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Initialize</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeLast">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>RunTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Movement</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Encoder</Name>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="GreaterThanOrEqual">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="DoubleProperty">
                      <Value>-10</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>single(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>z pos</Name>
                  </Expression>
                  <Expression xsi:type="TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="LessThan">
                          <Operand xsi:type="FloatProperty">
                            <Value>500</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Condition">
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                    </Builder>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>10</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>z pos</Name>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="FloatProperty">
                <Value>300</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Format">
              <Format>teste {0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OlfactometerCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeLast">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Termination</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>